PsychoPy2experiment version="3.0.0b13"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = TimingTask
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Routines
  Routine instr1
    TextComponent insRound1
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Two stimuli will appear on the screen.

        One white circle, and one black circle, for different durations.

        If you believe that the first stimulus appeared
        for a longer duration, press the LEFT arrow key.

        If you believe that the second stimulus appeared for
        a longer duration, press the RIGHT arrow key.

        Press space bar to proceed.
    KeyboardComponent respRound1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Block 1 starts

        Press space
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine round1_3
    PolygonComponent firstcircle_3
      fillColor = $[1,1,1]
      nVertices = 50
      shape = regular polygon...
      size = (0.3, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $firstTime
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    KeyboardComponent rtRound1_3
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $respStart
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = $plusStart
      stopVal [duration (s)] = 1
      text = +
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    PolygonComponent secondcircle
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 50
      shape = regular polygon...
      size = (0.3, 0.5)
      startVal [time (s)] = $secondStart
      stopVal [duration (s)] = $secondTime
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = next
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = The end
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  Routine block2
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Block 2 starts

        Press space
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block3
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Block 3 starts

        Press space
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block4
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Block 4 starts

        Press space
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr1
  Routine block
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditionsTime.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstTime', 1.8), ('secondTime', 1.2), ('corrAns', 'left'), ('plusStart', 2.3), ('secondStart', 3.3), ('respStart', 4.5), ('randNum', 0.17368025899999998)]),
      OrderedDict([('firstTime', 3.6), ('secondTime', 3.2), ('corrAns', 'left'), ('plusStart', 4.1), ('secondStart', 5.1), ('respStart', 8.3), ('randNum', 0.41458448299999995)]),
      OrderedDict([('firstTime', 2.5), ('secondTime', 1.5), ('corrAns', 'left'), ('plusStart', 3.0), ('secondStart', 4.0), ('respStart', 5.5), ('randNum', 0.148607464)]),
      OrderedDict([('firstTime', 1.8), ('secondTime', 2.7), ('corrAns', 'right'), ('plusStart', 2.3), ('secondStart', 3.3), ('respStart', 6.0), ('randNum', 0.13554984)]),
      OrderedDict([('firstTime', 1.2), ('secondTime', 1.8), ('corrAns', 'right'), ('plusStart', 1.7), ('secondStart', 2.7), ('respStart', 4.5), ('randNum', 0.309174352)]),
      OrderedDict([('firstTime', 8.8), ('secondTime', 9.9), ('corrAns', 'right'), ('plusStart', 9.3), ('secondStart', 10.3), ('respStart', 20.2), ('randNum', 0.7009299529999999)]),
      OrderedDict([('firstTime', 3.3), ('secondTime', 4.4), ('corrAns', 'right'), ('plusStart', 3.8), ('secondStart', 4.8), ('respStart', 9.2), ('randNum', 0.705723743)]),
      OrderedDict([('firstTime', 3.5), ('secondTime', 2.1), ('corrAns', 'left'), ('plusStart', 4.0), ('secondStart', 5.0), ('respStart', 7.1), ('randNum', 0.544523215)]),
      OrderedDict([('firstTime', 1.4), ('secondTime', 0.7), ('corrAns', 'left'), ('plusStart', 1.9), ('secondStart', 2.9), ('respStart', 3.6), ('randNum', 0.53553232)])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
    Routine round1_3
  LoopTerminator trials
  Routine block2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditionsTime2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstTime', 9.9), ('secondTime', 8.8), ('corrAns', 'left'), ('plusStart', 10.4), ('secondStart', 11.4), ('respStart', 20.2), ('randNum', 0.6005130679999999)]),
      OrderedDict([('firstTime', 1.5), ('secondTime', 2.5), ('corrAns', 'right'), ('plusStart', 2.0), ('secondStart', 3.0), ('respStart', 5.5), ('randNum', 0.805142221)]),
      OrderedDict([('firstTime', 0.7), ('secondTime', 1.4), ('corrAns', 'right'), ('plusStart', 1.2), ('secondStart', 2.2), ('respStart', 3.6), ('randNum', 0.70587608)]),
      OrderedDict([('firstTime', 1.2), ('secondTime', 1.8), ('corrAns', 'right'), ('plusStart', 1.7), ('secondStart', 2.7), ('respStart', 4.5), ('randNum', 0.276216099)]),
      OrderedDict([('firstTime', 3.3), ('secondTime', 4.4), ('corrAns', 'right'), ('plusStart', 3.8), ('secondStart', 4.8), ('respStart', 9.2), ('randNum', 0.803512663)]),
      OrderedDict([('firstTime', 2.1), ('secondTime', 2.8), ('corrAns', 'right'), ('plusStart', 2.6), ('secondStart', 3.6), ('respStart', 6.4), ('randNum', 0.26721103399999996)]),
      OrderedDict([('firstTime', 2.8), ('secondTime', 2.1), ('corrAns', 'left'), ('plusStart', 3.3), ('secondStart', 4.3), ('respStart', 6.4), ('randNum', 0.1426323)]),
      OrderedDict([('firstTime', 2.7), ('secondTime', 1.8), ('corrAns', 'left'), ('plusStart', 3.2), ('secondStart', 4.2), ('respStart', 6.0), ('randNum', 0.15619143)]),
      OrderedDict([('firstTime', 8.8), ('secondTime', 9.9), ('corrAns', 'right'), ('plusStart', 9.3), ('secondStart', 10.3), ('respStart', 20.2), ('randNum', 0.549248995)])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
    Routine round1_3
  LoopTerminator trials_2
  Routine block3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditionsTime3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstTime', 2.7), ('secondTime', 1.8), ('corrAns', 'left'), ('plusStart', 3.2), ('secondStart', 4.2), ('respStart', 6.0), ('randNum', 0.09224181599999999)]),
      OrderedDict([('firstTime', 1.8), ('secondTime', 2.7), ('corrAns', 'right'), ('plusStart', 2.3), ('secondStart', 3.3), ('respStart', 6.0), ('randNum', 0.320860695)]),
      OrderedDict([('firstTime', 0.7), ('secondTime', 1.4), ('corrAns', 'right'), ('plusStart', 1.2), ('secondStart', 2.2), ('respStart', 3.6), ('randNum', 0.091696964)]),
      OrderedDict([('firstTime', 4.4), ('secondTime', 3.3), ('corrAns', 'left'), ('plusStart', 4.9), ('secondStart', 5.9), ('respStart', 9.2), ('randNum', 0.010112259)]),
      OrderedDict([('firstTime', 0.9), ('secondTime', 1.8), ('corrAns', 'right'), ('plusStart', 1.4), ('secondStart', 2.4), ('respStart', 4.2), ('randNum', 0.877480265)]),
      OrderedDict([('firstTime', 1.8), ('secondTime', 0.9), ('corrAns', 'left'), ('plusStart', 2.3), ('secondStart', 3.3), ('respStart', 4.2), ('randNum', 0.74232345)]),
      OrderedDict([('firstTime', 1.8), ('secondTime', 1.2), ('corrAns', 'left'), ('plusStart', 2.3), ('secondStart', 3.3), ('respStart', 4.5), ('randNum', 0.307053849)]),
      OrderedDict([('firstTime', 3.6), ('secondTime', 3.2), ('corrAns', 'left'), ('plusStart', 4.1), ('secondStart', 5.1), ('respStart', 8.3), ('randNum', 0.331236492)]),
      OrderedDict([('firstTime', 2.5), ('secondTime', 1.5), ('corrAns', 'left'), ('plusStart', 3.0), ('secondStart', 4.0), ('respStart', 5.5), ('randNum', 0.778562476)])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
    Routine round1_3
  LoopTerminator trials_3
  Routine block4
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = conditionsTime4.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstTime', 2.5), ('secondTime', 1.5), ('corrAns', 'left'), ('plusStart', 3.0), ('secondStart', 4.0), ('respStart', 5.5), ('randNum', 0.9526453340000001)]),
      OrderedDict([('firstTime', 2.8), ('secondTime', 2.1), ('corrAns', 'left'), ('plusStart', 3.3), ('secondStart', 4.3), ('respStart', 6.4), ('randNum', 0.962497787)]),
      OrderedDict([('firstTime', 2.7), ('secondTime', 1.8), ('corrAns', 'left'), ('plusStart', 3.2), ('secondStart', 4.2), ('respStart', 6.0), ('randNum', 0.06690605599999999)]),
      OrderedDict([('firstTime', 8.8), ('secondTime', 9.9), ('corrAns', 'right'), ('plusStart', 9.3), ('secondStart', 10.3), ('respStart', 20.2), ('randNum', 0.09555333099999999)]),
      OrderedDict([('firstTime', 1.8), ('secondTime', 2.7), ('corrAns', 'right'), ('plusStart', 2.3), ('secondStart', 3.3), ('respStart', 6.0), ('randNum', 0.559320406)]),
      OrderedDict([('firstTime', 3.5), ('secondTime', 2.1), ('corrAns', 'left'), ('plusStart', 4.0), ('secondStart', 5.0), ('respStart', 7.1), ('randNum', 0.885130943)]),
      OrderedDict([('firstTime', 2.1), ('secondTime', 2.8), ('corrAns', 'right'), ('plusStart', 2.6), ('secondStart', 3.6), ('respStart', 6.4), ('randNum', 0.7843272990000001)]),
      OrderedDict([('firstTime', 4.4), ('secondTime', 3.3), ('corrAns', 'left'), ('plusStart', 4.9), ('secondStart', 5.9), ('respStart', 9.2), ('randNum', 0.594355042)])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
    Routine round1_3
  LoopTerminator trials_4
  Routine end
